PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = pygame
  Experiment info = {'participant': '21000', 'session': '1', 'version': '1'}
  Full-screen window = False
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = height
  Use version = 2022.2.4
  Window size (pixels) = [1920, 1080]
  color = $[-1, -1, -1]
  expName = flanker_task
  keyboardBackend = ioHub
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Routines
  Routine block1
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    ImageComponent stimuli_1
      image [set every repeat] = $stimuli_file
      size = (1.8,1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    KeyboardComponent key_resp_1
      allowedKeys [set every repeat] = 'left','right'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.65
      store = first key
      storeCorrect = True
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    ImageComponent background_1
      image = stimuli\images\block1_background.png
      size = (1.8,1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.65
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    CodeComponent stim_mrkr_1
      Code Type = Auto->JS
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      Begin Routine:
        responded = False

        # set congruent bool based off filename of stim image
        if stimuli_1.image.replace('.png', '').split('_')[-1][0] == 'C':
            congruent = True
        elif stimuli_1.image.replace('.png', '').split('_')[-1][0] == 'I':
            congruent = False
        else:
            congruent = None

        # set directionality of stim image as well
        if stimuli_1.image.replace('.png', '').split('_')[-1][1] == 'R':
            direction = 'right'
        elif stimuli_1.image.replace('.png', '').split('_')[-1][1] == 'L':
            direction = 'left'
        else: # neither direction was true?
            direction = None

        if congruent is True:
            # write 0A / 10
            port.write([0x0A])
        elif congruent is False:
            # write 0B / 12
            port.write([0x0C])
        #else: # else was neither congruent nor incongruent?
            # write error FF / 255
        #    port.write([0xFF])
      Each Frame:
        if len(key_resp_1.keys) != 0:
            if not responded:
        #        port.write([0x04])
                responded = True

                # if answer is correct
                if key_resp_1.keys == direction:
                    # write 0C / 14
                    port.write([0x0E])
                elif key_resp_1.keys != direction:
                    # write 0D / 15
                    port.write([0x0F])

        if congruent is True and stimuli_1.status==FINISHED:
            # write 0B / 11
            port.write([0x0B])
        elif congruent is False and stimuli_1.status==FINISHED:
            # write 0B / 13
            port.write([0x0D])
        #else:
        #    port.write([0xFF])
      End Routine:
        if not responded: #missed trial marker 16
            port.write([0x10])
  Routine block1_intro
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    ImageComponent intro_1
      image = stimuli\block1_rest.png
      size = (1.8,1.255)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
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  Routine block2_intro
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    ImageComponent intro_2
      image = stimuli\block2_rest.png
      size = (1.8,1.255)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
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  Routine block2
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    ImageComponent stimuli_2
      image [set every repeat] = $stimuli_file
      size = (1.8,1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    KeyboardComponent key_resp_2
      allowedKeys = 'left','right'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.65
      store = first key
      storeCorrect = True
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    ImageComponent background_2
      image [set every repeat] = stimuli\images\block2_background.png
      size = (1.8,1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.65
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    CodeComponent stim_mrkr_2
      Code Type = Auto->JS
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      Begin Routine:
        responded = False

        # set congruent bool based off filename of stim image
        if stimuli_2.image.replace('.png', '').split('_')[-1][0] == 'C':
            congruent = True
        elif stimuli_2.image.replace('.png', '').split('_')[-1][0] == 'I':
            congruent = False
        else:
            congruent = None

        # set directionality of stim image as well
        if stimuli_2.image.replace('.png', '').split('_')[-1][1] == 'R':
            direction = 'right'
        elif stimuli_2.image.replace('.png', '').split('_')[-1][1] == 'L':
            direction = 'left'
        else: # neither direction was true?
            direction = None

        if congruent is True:
            # write 0A / 10
            port.write([0x0A])
        elif congruent is False:
            # write 0B / 12
            port.write([0x0C])
        #else: # else was neither congruent nor incongruent?
            # write error FF / 255
        #    port.write([0xFF])
      Each Frame:
        if len(key_resp_2.keys) != 0:
            if not responded:
        #        port.write([0x04])
                responded = True

                # if answer is correct
                if key_resp_2.keys == direction:
                    # write 0C / 14
                    port.write([0x0E])
                elif key_resp_2.keys != direction:
                    # write 0D / 15
                    port.write([0x0F])

        if congruent is True and stimuli_2.status==FINISHED:
            # write 0B / 11
            port.write([0x0B])
        elif congruent is False and stimuli_2.status==FINISHED:
            # write 0B / 13
            port.write([0x0D])
        #else:
        #    port.write([0xFF])
      End Routine:
        if not responded: #missed trial marker 16
            port.write([0x10])
  Routine block3_intro
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    ImageComponent intro_3
      image = stimuli\block3_rest.png
      size = (1.8,1.255)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
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  Routine block3
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    ImageComponent stimuli_3
      image [set every repeat] = $stimuli_file
      size = (1.8,1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    KeyboardComponent key_resp_3
      allowedKeys = 'left','right'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.65
      store = first key
      storeCorrect = True
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    ImageComponent background_3
      image [set every repeat] = stimuli\images\block3_background.png
      size = (1.8,1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.65
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    CodeComponent stim_mrkr_3
      Code Type = Auto->JS
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      Begin Routine:
        responded = False

        # set congruent bool based off filename of stim image
        if stimuli_3.image.replace('.png', '').split('_')[-1][0] == 'C':
            congruent = True
        elif stimuli_3.image.replace('.png', '').split('_')[-1][0] == 'I':
            congruent = False
        else:
            congruent = None

        # set directionality of stim image as well
        if stimuli_3.image.replace('.png', '').split('_')[-1][1] == 'R':
            direction = 'right'
        elif stimuli_3.image.replace('.png', '').split('_')[-1][1] == 'L':
            direction = 'left'
        else: # neither direction was true?
            direction = None

        if congruent is True:
            # write 0A / 10
            port.write([0x0A])
        elif congruent is False:
            # write 0B / 12
            port.write([0x0C])
        #else: # else was neither congruent nor incongruent?
            # write error FF / 255
        #    port.write([0xFF])
      Each Frame:
        if len(key_resp_3.keys) != 0:
            if not responded:
        #        port.write([0x04])
                responded = True

                # if answer is correct
                if key_resp_3.keys == direction:
                    # write 0C / 14
                    port.write([0x0E])
                elif key_resp_3.keys != direction:
                    # write 0D / 15
                    port.write([0x0F])

        if congruent is True and stimuli_3.status==FINISHED:
            # write 0B / 11
            port.write([0x0B])
        elif congruent is False and stimuli_3.status==FINISHED:
            # write 0B / 13
            port.write([0x0D])
        #else:
        #    port.write([0xFF])
      End Routine:
        if not responded: #missed trial marker 16
            port.write([0x10])
  Routine block4_intro
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  Routine block4
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    ImageComponent stimuli_4
      image [set every repeat] = $stimuli_file
      size = (1.8,1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    KeyboardComponent key_resp_4
      allowedKeys = 'left','right'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.65
      store = first key
      storeCorrect = True
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    ImageComponent background_4
      image = stimuli\images\block4_background.png
      size = (1.8,1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.65
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    CodeComponent stim_mrkr_4
      Code Type = Auto->JS
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      Begin Routine:
        responded = False

        # set congruent bool based off filename of stim image
        if stimuli_4.image.replace('.png', '').split('_')[-1][0] == 'C':
            congruent = True
        elif stimuli_4.image.replace('.png', '').split('_')[-1][0] == 'I':
            congruent = False
        else:
            congruent = None

        # set directionality of stim image as well
        if stimuli_4.image.replace('.png', '').split('_')[-1][1] == 'R':
            direction = 'right'
        elif stimuli_4.image.replace('.png', '').split('_')[-1][1] == 'L':
            direction = 'left'
        else: # neither direction was true?
            direction = None

        if congruent is True:
            # write 0A / 10
            port.write([0x0A])
        elif congruent is False:
            # write 0B / 12
            port.write([0x0C])
        #else: # else was neither congruent nor incongruent?
            # write error FF / 255
        #    port.write([0xFF])
      Each Frame:
        if len(key_resp_4.keys) != 0:
            if not responded:
        #        port.write([0x04])
                responded = True

                # if answer is correct
                if key_resp_4.keys == direction:
                    # write 0C / 14
                    port.write([0x0E])
                elif key_resp_4.keys != direction:
                    # write 0D / 15
                    port.write([0x0F])

        if congruent is True and stimuli_4.status==FINISHED:
            # write 0B / 11
            port.write([0x0B])
        elif congruent is False and stimuli_4.status==FINISHED:
            # write 0B / 13
            port.write([0x0D])
        #else:
        #    port.write([0xFF])
      End Routine:
        if not responded: #missed trial marker 16
            port.write([0x10])
  Routine block5_intro
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  Routine block5
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    ImageComponent stimuli_5
      image [set every repeat] = $stimuli_file
      size = (1.8,1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    KeyboardComponent key_resp_5
      allowedKeys = 'left','right'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.65
      store = first key
      storeCorrect = True
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    ImageComponent background_5
      image [set every repeat] = stimuli\images\block5_background.png
      size = (1.8,1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.65
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    CodeComponent stim_mrkr_5
      Code Type = Auto->JS
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      Begin Routine:
        responded = False

        # set congruent bool based off filename of stim image
        if stimuli_5.image.replace('.png', '').split('_')[-1][0] == 'C':
            congruent = True
        elif stimuli_5.image.replace('.png', '').split('_')[-1][0] == 'I':
            congruent = False
        else:
            congruent = None

        # set directionality of stim image as well
        if stimuli_5.image.replace('.png', '').split('_')[-1][1] == 'R':
            direction = 'right'
        elif stimuli_5.image.replace('.png', '').split('_')[-1][1] == 'L':
            direction = 'left'
        else: # neither direction was true?
            direction = None

        if congruent is True:
            # write 0A / 10
            port.write([0x0A])
        elif congruent is False:
            # write 0B / 12
            port.write([0x0C])
        #else: # else was neither congruent nor incongruent?
            # write error FF / 255
        #    port.write([0xFF])
      Each Frame:
        if len(key_resp_5.keys) != 0:
            if not responded:
        #        port.write([0x04])
                responded = True

                # if answer is correct
                if key_resp_5.keys == direction:
                    # write 0C / 14
                    port.write([0x0E])
                elif key_resp_5.keys != direction:
                    # write 0D / 15
                    port.write([0x0F])

        if congruent is True and stimuli_5.status==FINISHED:
            # write 0B / 11
            port.write([0x0B])
        elif congruent is False and stimuli_5.status==FINISHED:
            # write 0B / 13
            port.write([0x0D])
        #else:
        #    port.write([0xFF])
      End Routine:
        if not responded: #missed trial marker 16
            port.write([0x10])
  Routine block6_intro
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  Routine block6
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    ImageComponent stimuli_6
      image [set every repeat] = $stimuli_file
      size = (1.8,1)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 1
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    KeyboardComponent key_resp_6
      allowedKeys = 'left','right'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 1.65
      store = first key
      storeCorrect = True
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    ImageComponent background_6
      image [set every repeat] = stimuli\images\block6_background.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    PolygonComponent fixation_6
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    ImageComponent background2_6
      image [set every repeat] = stimuli\images\block6_background.png
      size = (1.8,1)
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 0.65
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    SoundComponent block6_sound
      sound = stimuli\sounds\fixation_beep.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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  Routine block7_intro
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  Routine block7
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    ImageComponent stimuli_7
      image [set every repeat] = $stimuli_file
      size = (1.8,1)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 1
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    KeyboardComponent key_resp_7
      allowedKeys = 'left','right'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 1.65
      store = first key
      storeCorrect = True
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    ImageComponent background_7
      image [set every repeat] = stimuli\images\block7_background.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    PolygonComponent fixation_7
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    ImageComponent background2_7
      image [set every repeat] = stimuli\images\block7_background.png
      size = (1.8,1)
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 0.65
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    SoundComponent block7_sound
      sound = stimuli\sounds\fixation_beep.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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  Routine block8_intro
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  Routine block8
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    ImageComponent stimuli_8
      image [set every repeat] = $stimuli_file
      size = (1.8,1)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 1
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    KeyboardComponent key_resp_8
      allowedKeys = 'left','right'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 1.65
      store = first key
      storeCorrect = True
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    ImageComponent background_8
      image [set every repeat] = stimuli\images\block8_background.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    PolygonComponent fixation_8
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    ImageComponent background2_8
      image [set every repeat] = stimuli\images\block8_background.png
      size = (1.8,1)
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 0.65
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    SoundComponent block8_sound
      sound = stimuli\sounds\fixation_beep.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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  Routine block9_intro
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  Routine block9
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  Routine block10_intro
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  Routine block10
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  Routine test
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    KeyboardComponent key_resp_11
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Any text

        including line breaks
  Routine block2_rest
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    ImageComponent rest_2
      image = stimuli\images\block2_rest.png
      size = (1.8,1.255)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
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    MovieComponent animation_2
      backend = moviepy
      forceEndRoutine = False
      movie = stimuli\animations\block2_animation.mp4
      size = (1920,1080)
      startVal [time (s)] = 12
      stopVal [duration (s)] = 15
      units = pix
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    SoundComponent lets_go2
      sound = stimuli\sounds\letsgo.wav
      startVal [time (s)] = 25
      stopVal [duration (s)] = 2.0
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    CodeComponent strt_mrkr_2
      Code Type = Py
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      Begin Routine:
        #  Stim marker: end of block1
        port.write([0x02])
      End Routine:
        #  Start of block2
        port.write([0x01])
  Routine block1_rest
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    ImageComponent rest_1
      image = stimuli\images\block1_rest.png
      size = (1.8,1.255)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
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    MovieComponent animation_1
      backend = ffpyplayer
      forceEndRoutine = False
      movie = stimuli/animations/block1_animation.mp4
      size = (1920,1080)
      startVal [time (s)] = 12
      stopVal [duration (s)] = 15
      units = pix
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    SoundComponent lets_go
      sound = stimuli\sounds\letsgo.wav
      startVal [time (s)] = 25.0
      stopVal [duration (s)] = 2.0
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    CodeComponent strt_mrkr_1
      Code Type = Py
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      End Routine:
        #  Stim marker: start of block1
        port.write([0x01])
  Routine block3_rest
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    ImageComponent rest_3
      image = stimuli\images\block3_rest.png
      size = (1.8,1.255)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
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    MovieComponent animation_3
      backend = moviepy
      forceEndRoutine = False
      movie = stimuli\animations\block3_animation.mp4
      size = (1920,1080)
      startVal [time (s)] = 12
      stopVal [duration (s)] = 15
      units = pix
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    SoundComponent lets_go3
      sound = stimuli\sounds\letsgo.wav
      startVal [time (s)] = 23
      stopVal [duration (s)] = 2.0
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    CodeComponent strt_mrkr_3
      Code Type = Py
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      Begin Routine:
        #  Stim marker: end of block2
        port.write([0x02])
      End Routine:
        #  Start of block3
        port.write([0x01])
  Routine block4_rest
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    ImageComponent rest_4
      image = stimuli\images\block4_rest.png
      size = (1.8,1.255)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
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    MovieComponent animation_4
      backend = moviepy
      forceEndRoutine = False
      movie = stimuli\animations\block4_animation.mp4
      size = (1920,1080)
      startVal [time (s)] = 12
      stopVal [duration (s)] = 15
      units = pix
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    SoundComponent lets_go4
      sound = stimuli\sounds\letsgo.wav
      startVal [time (s)] = 23
      stopVal [duration (s)] = 2.0
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    CodeComponent strt_mrkr_4
      Code Type = Py
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      Begin Routine:
        #  Stim marker: end of block3
        port.write([0x02])
      End Routine:
        #  Start of block4
        port.write([0x01])
  Routine block5_rest
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    ImageComponent rest_5
      image = stimuli\images\block5_rest.png
      size = (1.8,1.255)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
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    MovieComponent animation_5
      backend = moviepy
      forceEndRoutine = False
      movie = stimuli\animations\block5_animation.mp4
      size = (1920,1080)
      startVal [time (s)] = 12
      stopVal [duration (s)] = 15
      units = pix
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    SoundComponent lets_go5
      sound = stimuli\sounds\letsgo.wav
      startVal [time (s)] = 25
      stopVal [duration (s)] = 2.0
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    CodeComponent strt_mrkr_5
      Code Type = Py
      Begin Routine:
        #  Stim marker: end of block4
        port.write([0x02])
      End Routine:
        #  Start of block5
        port.write([0x01])
  Routine block6_rest
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    ImageComponent image_6
      image = stimuli\block6_rest.png
      size = (1.8,1.255)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
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    MovieComponent block6_animation
      backend = moviepy
      forceEndRoutine = False
      movie = stimuli\animations\block6_animation.mp4
      startVal [time (s)] = 12
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    SoundComponent lets_go6
      sound = stimuli\sounds\letsgo.wav
      startVal [time (s)] = 25
      stopVal [duration (s)] = 2.0
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  Routine block7_rest
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    ImageComponent image_7
      image = stimuli\block7_rest.png
      size = (1.8,1.255)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
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    MovieComponent block7_animation
      backend = moviepy
      forceEndRoutine = False
      movie = stimuli\animations\block7_animation.mp4
      startVal [time (s)] = 12
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    SoundComponent lets_go7
      sound = stimuli\sounds\letsgo.wav
      startVal [time (s)] = 25
      stopVal [duration (s)] = 2.0
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  Routine block8_rest
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    ImageComponent image_8
      image = stimuli\block8_rest.png
      size = (1.8,1.255)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
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    MovieComponent block8_animation
      backend = moviepy
      forceEndRoutine = False
      movie = stimuli\animations\block8_animation.mp4
      startVal [time (s)] = 12
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    SoundComponent lets_go8
      sound = stimuli\sounds\letsgo.wav
      startVal [time (s)] = 25
      stopVal [duration (s)] = 2.0
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  Routine block9_rest
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  Routine block10_rest
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  Routine end
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    MovieComponent end_scene
      backend = moviepy
      forceEndRoutine = False
      movie = stimuli\animations\endscene_animation.mp4
      size = (1920,1080)
      startVal [time (s)] = 0.0
      units = pix
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    CodeComponent end_mrkr_5
      Code Type = Auto->JS
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      Begin Routine:
        #  Stim marker: end of block5
        port.write([0x02])
  Routine intro
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    MovieComponent intro_game
      backend = moviepy
      forceEndRoutine = False
      movie = stimuli\intro\intro_game.mp4
      size = (1920,1080)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent key_resp_12
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine LSL
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        from pylsl import StreamInfo, StreamOutlet # import required classes
        info = StreamInfo(name='Trigger', type='Markers', channel_count=1, channel_format='int32', source_id='P-CAT') # sets variables for object info
        outlet = StreamOutlet(info)# initialize stream.
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = check LSL, start recording, then press space to continue
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    KeyboardComponent key_resp_13
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine endslide
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    ImageComponent endscene_text
      image = stimuli\images\endscene_text.png
      size = (1.8,1.255)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine trigger
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    CodeComponent eeg_trig
      Code Type = Py
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      Begin Experiment:
        import serial
        import time
        import threading

        Connected = True

        # Open the Windows device manager, search for the "TriggerBox VirtualSerial Port (COM6)"
        # in "Ports /COM & LPT)" and enter the COM port number in the constructor.
        #Setting up the link between psychopy and actiCHAMP
        port = serial.Serial("COM4")
    CodeComponent ecg_trig
      Code Type = Auto->JS
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      Begin Experiment:
        import socket

        UDP_IP = "127.0.0.1"
        UDP_PORT = 5005

        sock = socket.socket(socket.AF_INET, # Internet
                     socket.SOCK_DGRAM) # UDP
        sock.sendto(MESSAGE, (UDP_IP, UDP_PORT))
    TextComponent begin
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Click to begin task.
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    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine remember
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    ImageComponent image_11
      image = stimuli\images\gooblemiddle.png
      size = (1.8, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_14
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ITI_1
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    ImageComponent fix_1
      image = stimuli\images\block1_fixation.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter
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    CodeComponent jitter_1
      Code Type = Auto->JS
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      Begin Routine:
        #jitter is randomized between 1.3 and 1.7
        jitter = random() * (1.7 - 1.3) + 1.3
      End Routine:
        #to save jitter to data sheet
        thisExp.addData('jitter', jitter)
  Routine ITI_2
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    ImageComponent fix_2
      image = stimuli\images\block2_fixation.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter
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    CodeComponent jitter_2
      Code Type = Auto->JS
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      Begin Routine:
        #jitter is randomized between 1.3 and 1.7
        jitter = random() * (1.7 - 1.3) + 1.3
      End Routine:
        thisExp.addData('jitter', jitter)
  Routine ITI_3
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    ImageComponent fix_3
      image = stimuli\images\block3_fixation.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter
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    CodeComponent jitter_3
      Code Type = Auto->JS
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      Begin Routine:
        #jitter is randomized between 1.3 and 1.7
        jitter = random() * (1.7 - 1.3) + 1.3
      End Routine:
        thisExp.addData('jitter', jitter)
  Routine ITI_4
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    ImageComponent fix_4
      image = stimuli\images\block4_fixation.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter
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    CodeComponent jitter_4
      Code Type = Auto->JS
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      Begin Routine:
        #jitter is randomized between 1.3 and 1.7
        jitter = random() * (1.7 - 1.3) + 1.3
      End Routine:
        thisExp.addData('jitter', jitter)
  Routine ITI_5
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Flow
  Routine trigger
  Routine intro
  Routine remember
  Routine block1_rest
  LoopInitiator block1_trial loopType="TrialHandler"
    conditionsFile = conditions/block1_conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'stimuli_file': 'stimuli/trial_block1_D_IR.png', 'corrAns': 'right'},
      {'stimuli_file': 'stimuli/trial_block1_D_CR.png', 'corrAns': 'right'},
      {'stimuli_file': 'stimuli/trial_block1_D_CL.png', 'corrAns': 'left'},
      {'stimuli_file': 'stimuli/trial_block1_D_CR.png', 'corrAns': 'right'},
      {'stimuli_file': 'stimuli/trial_block1_D_IL.png', 'corrAns': 'left'},
      {'stimuli_file': 'stimuli/trial_block1_D_CR.png', 'corrAns': 'right'},
      {'stimuli_file': 'stimuli/trial_block1_D_CL.png', 'corrAns': 'left'},
      {'stimuli_file': 'stimuli/trial_block1_D_IR.png', 'corrAns': 'right'},
      {'stimuli_file': 'stimuli/trial_block1_D_CR.png', 'corrAns': 'right'},
      {'stimuli_file': 'stimuli/trial_block1_D_IL.png', 'corrAns': 'left'},
      {'stimuli_file': 'stimuli/trial_block1_D_IR.png', 'corrAns': 'right'},
      {'stimuli_file': 'stimuli/trial_block1_D_IL.png', 'corrAns': 'left'},
      {'stimuli_file': 'stimuli/trial_block1_D_IR.png', 'corrAns': 'right'},
      {'stimuli_file': 'stimuli/trial_block1_D_CL.png', 'corrAns': 'left'},
      {'stimuli_file': 'stimuli/trial_block1_D_IL.png', 'corrAns': 'left'},
      {'stimuli_file': 'stimuli/trial_block1_D_IR.png', 'corrAns': 'right'},
      {'stimuli_file': 'stimuli/trial_block1_D_CL.png', 'corrAns': 'left'},
      {'stimuli_file': 'stimuli/trial_block1_D_CL.png', 'corrAns': 'left'},
      {'stimuli_file': 'stimuli/trial_block1_D_IL.png', 'corrAns': 'left'},
      {'stimuli_file': 'stimuli/trial_block1_D_CR.png', 'corrAns': 'right'},
      {'stimuli_file': 'stimuli/trial_block1_D_IR.png', 'corrAns': 'right'}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
    Routine ITI_1
    Routine block1
  LoopTerminator block1_trial
  Routine block2_rest
  LoopInitiator block2_trial loopType="TrialHandler"
    conditionsFile = conditions/block2_conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'stimuli_file': 'stimuli/trial_block2_D_CR.png', 'corrAns': 'right'},
      {'stimuli_file': 'stimuli/trial_block2_D_IR.png', 'corrAns': 'right'},
      {'stimuli_file': 'stimuli/trial_block2_D_IL.png', 'corrAns': 'left'},
      {'stimuli_file': 'stimuli/trial_block2_D_IR.png', 'corrAns': 'right'},
      {'stimuli_file': 'stimuli/trial_block2_D_IR.png', 'corrAns': 'right'},
      {'stimuli_file': 'stimuli/trial_block2_D_CR.png', 'corrAns': 'right'},
      {'stimuli_file': 'stimuli/trial_block2_D_CL.png', 'corrAns': 'left'},
      {'stimuli_file': 'stimuli/trial_block2_D_IL.png', 'corrAns': 'left'},
      {'stimuli_file': 'stimuli/trial_block2_D_CL.png', 'corrAns': 'left'},
      {'stimuli_file': 'stimuli/trial_block2_D_CL.png', 'corrAns': 'left'},
      {'stimuli_file': 'stimuli/trial_block2_D_IR.png', 'corrAns': 'right'},
      {'stimuli_file': 'stimuli/trial_block2_D_IL.png', 'corrAns': 'left'},
      {'stimuli_file': 'stimuli/trial_block2_D_IR.png', 'corrAns': 'right'},
      {'stimuli_file': 'stimuli/trial_block2_D_CR.png', 'corrAns': 'right'},
      {'stimuli_file': 'stimuli/trial_block2_D_IL.png', 'corrAns': 'left'},
      {'stimuli_file': 'stimuli/trial_block2_D_CR.png', 'corrAns': 'right'},
      {'stimuli_file': 'stimuli/trial_block2_D_CR.png', 'corrAns': 'right'},
      {'stimuli_file': 'stimuli/trial_block2_D_CL.png', 'corrAns': 'left'},
      {'stimuli_file': 'stimuli/trial_block2_D_CL.png', 'corrAns': 'left'},
      {'stimuli_file': 'stimuli/trial_block2_D_IL.png', 'corrAns': 'left'},
      {'stimuli_file': 'stimuli/trial_block2_D_IR.png', 'corrAns': 'right'}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
    Routine ITI_2
    Routine block2
  LoopTerminator block2_trial
  Routine block3_rest
  LoopInitiator block3_trial loopType="TrialHandler"
    conditionsFile = conditions/block3_conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'stimuli_file': 'stimuli/trial_block3_D_IL.png', 'corrAns': 'left'},
      {'stimuli_file': 'stimuli/trial_block3_D_IR.png', 'corrAns': 'right'},
      {'stimuli_file': 'stimuli/trial_block3_D_CL.png', 'corrAns': 'left'},
      {'stimuli_file': 'stimuli/trial_block3_D_CL.png', 'corrAns': 'left'},
      {'stimuli_file': 'stimuli/trial_block3_D_CR.png', 'corrAns': 'right'},
      {'stimuli_file': 'stimuli/trial_block3_D_IR.png', 'corrAns': 'right'},
      {'stimuli_file': 'stimuli/trial_block3_D_IR.png', 'corrAns': 'right'},
      {'stimuli_file': 'stimuli/trial_block3_D_IL.png', 'corrAns': 'left'},
      {'stimuli_file': 'stimuli/trial_block3_D_IR.png', 'corrAns': 'right'},
      {'stimuli_file': 'stimuli/trial_block3_D_IL.png', 'corrAns': 'left'},
      {'stimuli_file': 'stimuli/trial_block3_D_CR.png', 'corrAns': 'right'},
      {'stimuli_file': 'stimuli/trial_block3_D_IL.png', 'corrAns': 'left'},
      {'stimuli_file': 'stimuli/trial_block3_D_IR.png', 'corrAns': 'right'},
      {'stimuli_file': 'stimuli/trial_block3_D_IL.png', 'corrAns': 'left'},
      {'stimuli_file': 'stimuli/trial_block3_D_CR.png', 'corrAns': 'right'},
      {'stimuli_file': 'stimuli/trial_block3_D_CL.png', 'corrAns': 'left'},
      {'stimuli_file': 'stimuli/trial_block3_D_CL.png', 'corrAns': 'left'},
      {'stimuli_file': 'stimuli/trial_block3_D_CR.png', 'corrAns': 'right'},
      {'stimuli_file': 'stimuli/trial_block3_D_CR.png', 'corrAns': 'right'},
      {'stimuli_file': 'stimuli/trial_block3_D_CL.png', 'corrAns': 'left'},
      {'stimuli_file': 'stimuli/trial_block3_D_IR.png', 'corrAns': 'right'}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
    Routine ITI_3
    Routine block3
  LoopTerminator block3_trial
  Routine block4_rest
  LoopInitiator block4_trial loopType="TrialHandler"
    conditionsFile = conditions/block4_conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'stimuli_file': 'stimuli/trial_block4_D_IR.png', 'corrAns': 'right'},
      {'stimuli_file': 'stimuli/trial_block4_D_CR.png', 'corrAns': 'right'},
      {'stimuli_file': 'stimuli/trial_block4_D_CL.png', 'corrAns': 'left'},
      {'stimuli_file': 'stimuli/trial_block4_D_IR.png', 'corrAns': 'right'},
      {'stimuli_file': 'stimuli/trial_block4_D_IR.png', 'corrAns': 'right'},
      {'stimuli_file': 'stimuli/trial_block4_D_IL.png', 'corrAns': 'left'},
      {'stimuli_file': 'stimuli/trial_block4_D_CR.png', 'corrAns': 'right'},
      {'stimuli_file': 'stimuli/trial_block4_D_IL.png', 'corrAns': 'left'},
      {'stimuli_file': 'stimuli/trial_block4_D_IL.png', 'corrAns': 'left'},
      {'stimuli_file': 'stimuli/trial_block4_D_CL.png', 'corrAns': 'left'},
      {'stimuli_file': 'stimuli/trial_block4_D_CL.png', 'corrAns': 'left'},
      {'stimuli_file': 'stimuli/trial_block4_D_CR.png', 'corrAns': 'right'},
      {'stimuli_file': 'stimuli/trial_block4_D_CL.png', 'corrAns': 'left'},
      {'stimuli_file': 'stimuli/trial_block4_D_CR.png', 'corrAns': 'right'},
      {'stimuli_file': 'stimuli/trial_block4_D_IR.png', 'corrAns': 'right'},
      {'stimuli_file': 'stimuli/trial_block4_D_IR.png', 'corrAns': 'right'},
      {'stimuli_file': 'stimuli/trial_block4_D_CL.png', 'corrAns': 'left'},
      {'stimuli_file': 'stimuli/trial_block4_D_CR.png', 'corrAns': 'right'},
      {'stimuli_file': 'stimuli/trial_block4_D_IL.png', 'corrAns': 'left'},
      {'stimuli_file': 'stimuli/trial_block4_D_IL.png', 'corrAns': 'left'},
      {'stimuli_file': 'stimuli/trial_block4_D_IR.png', 'corrAns': 'right'}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
    Routine ITI_4
    Routine block4
  LoopTerminator block4_trial
  Routine block5_rest
  LoopInitiator block5_trial loopType="TrialHandler"
    conditionsFile = conditions/block5_conditions - Copy.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'stimuli_file': 'stimuli/trial_block5_D_IL.png', 'corrAns': 'left'},
      {'stimuli_file': 'stimuli/trial_block5_D_CR.png', 'corrAns': 'right'},
      {'stimuli_file': 'stimuli/trial_block5_D_CL.png', 'corrAns': 'left'},
      {'stimuli_file': 'stimuli/trial_block5_D_IL.png', 'corrAns': 'left'}]
    Routine ITI_5
    Routine block5
  LoopTerminator block5_trial
  Routine end
  Routine endslide
